PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'experimenter': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = charts
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    CodeComponent format_patient_chart
      Code Type = Py
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      Begin Routine:
        header = ["Muscles", "Insulin", "Glands", "Sinus"]
        symptoms = [muscles, insulin, glands, sinus]

        chart = [f"{x}: {y}" for x, y in zip(header, symptoms)]
        chart_text = "\n".join(chart)
    TextComponent trial_chart
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $chart_text
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    KeyboardComponent subject_response
      allowedKeys = "a", "b"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine setup
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    CodeComponent trial_setup
      Code Type = Py
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      Begin Experiment:
        exp_files_dir = "experiment_files"
        current_phase = "training"
        conditions = {
            "training": os.path.join(exp_files_dir, "training.csv"),
            "testing": os.path.join(exp_files_dir, "testing.csv")
            }
  Routine feedback
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    CodeComponent generate_feedback
      Code Type = Auto->JS
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      Begin Routine:
        correct = False
        if(subject_response.keys[0] == category):
            correct = True

        feedback = "Correct" if correct else "Incorrect"
    TextComponent feedback_chart
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $chart_text
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    TextComponent feedback_text
      letterHeight = 0.05
      pos = (0, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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Flow
  Routine setup
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = $(conditions[current_phase])
    loopType = random
    nReps = 8
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    conditions:
      [OrderedDict([('binary_representation', 1111), ('muscles', 'relaxed'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'runny'), ('category', 'A'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 1100), ('muscles', 'relaxed'), ('insulin', 'low'), ('glands', 'swollen'), ('sinus', 'stuffy'), ('category', 'A'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 111), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'runny'), ('category', 'A'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 1000), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'stuffy'), ('category', 'A'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 0), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'stuffy'), ('category', 'B'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 1), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'B'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 1010), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'B'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 101), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'B'), ('phase', 'training')])]
    Routine trial
    Routine feedback
  LoopTerminator trials_loop
