PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Data filename = u'data/%s_%s' % (expName, expInfo['participant'])
  Experiment info = {'participant': '', 'experimenter': '', 'condition': 'C', 'number of pairs': '8'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  color = 1.0000, 1.0000, 1.0000
  expName = Choose34
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent imports
      Code Type = Py
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      Before Experiment:
        import random
        import csv

        from collections import defaultdict
    CodeComponent constants
      Code Type = Py
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      Before Experiment:
        pairsPath = "./assets/pairs/"
        expFilesPath = "./experimentFiles/"
        stimsFieldNames = ["Left_Stim", "Right_Stim"]
        leftKey = 'z'
        rightKey = 'm'
        phases = ["practice", "training", "testing"]
    CodeComponent initializeVars
      Code Type = Py
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      Before Experiment:
        def constantFactory(value):
            return lambda: value

        # This dictionary tells which object has a smiley
        # it has the format {<object_name> : True/False}. If <object_name> is not in
        # in the dictionary it will return False by default.
        hasSmiley = defaultdict(constantFactory(False))

        # First practice answer is always wrong. So we assigned the smiley AFTER
        # subject's response. We use this variable to determine if we have assigned
        # the smiley yet
        assignedSmiley = False

        # We use this variable to determine what phase we are in and
        #update it accordingly
        currentPhase = "practice"

        # Number of consecutive correct responses needed to move to next phase
        # this changes in the trialBlocks loop
        criterion = 16

        # Changes on trialLoop
        consecutiveCorrectResponses = 0

        # Initialized to avoid errors
        Right_Stim = ""
        Left_Stim = ""
    CodeComponent generatePhaseFiles
      Code Type = Py
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      Before Experiment:
        for phase in phases[1:]:
            with open(f"./experimentFiles/{phase}.csv", "w") as f:
                f.write("pair,Left_Stim,Right_Stim,Correct_Response\n")
                for i in range(1, 9):
                    imgs = os.listdir(f"./assets/pairs/pair{i}/{phase}")
                    correct = random.randint(0, 1)
                    if correct == 0:
                        img0 = imgs[0].split(".")[0]
                        img1 = imgs[1].split(".")[0]
                        f.write(f"pair{i},{img0},{img1},left\n")
                        f.write(f"pair{i},{img1},{img0},right\n")
                        hasSmiley[img0] = True
                    else:
                        img0 = imgs[0].split(".")[0]
                        img1 = imgs[1].split(".")[0]
                        f.write(f"pair{i},{img0},{img1},right\n")
                        f.write(f"pair{i},{img1},{img0},left\n")
                        hasSmiley[img1] = True
  Routine choose
    CodeComponent setImgsPaths
      Code Type = Py
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      Begin Routine:
        leftImgPath = pairsPath + pair + "/" + currentPhase + "/" + Left_Stim + ".png"
        rightImgPath = pairsPath + pair + "/" + currentPhase + "/" + Right_Stim + ".png"

        print(f"COOOOOOOOONNOOOOOOO {trialConditionsFile}")

        if(currentPhase == "practice"):
            leftImgPath = pairsPath + currentPhase + "/" + Left_Stim + ".png"
            rightImgPath = pairsPath + currentPhase + "/" + Right_Stim + ".png"
    ImageComponent leftStim
      image [set every repeat] = $leftImgPath
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    ImageComponent rightStim
      image [set every repeat] = $rightImgPath
      pos = (0.25, 0)
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
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    TextComponent textPrompt
      letterHeight = 0.035
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Which object is the smiley face under?
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    KeyboardComponent Subject_Response
      allowedKeys = 'z', 'm', 'space',
      correctAns = $('z' if hasSmiley[Left_Stim] else 'm' if hasSmiley[Right_Stim] else '')
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent assignSmiley
      Code Type = Py
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      End Routine:
        if(not assignedSmiley and Subject_Response.keys == leftKey):
            # assign smiley to right stim
            hasSmiley[Left_Stim] = False
            hasSmiley[Right_Stim] = True
            assignedSmiley = True
        elif(not assignedSmiley):
            #assign smiley to left stim
            hasSmiley[Left_Stim] = True
            hasSmiley[Right_Stim] = False
            assignedSmiley = True
    CodeComponent correctResponse
      Code Type = Py
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      End Routine:
        correctResponse = False

        if(Subject_Response.keys == leftKey and hasSmiley[Left_Stim]):
            consecutiveCorrectResponses += 1
            correctResponse = True
        elif(Subject_Response.keys == rightKey and hasSmiley[Right_Stim]):
            consecutiveCorrectResponses += 1
            correctResponse = True
        else:
            consecutiveCorrectResponses = 0
  Routine reveal
    ImageComponent practiceLeftStimReveal
      image [set every repeat] = $leftImgPath
      pos [set every frame] = [-0.25, min(0.1, frameN/100)] if (Subject_Response.keys == leftKey) else [-0.25, 0]
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent practiceRightStimReveal
      image [set every repeat] = $rightImgPath
      pos [set every frame] = [0.25, min(0.1, frameN/100)] if (Subject_Response.keys == rightKey) else [0.25, 0]
      saveStartStop = False
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent practiceSmiley
      image = assets/smiley.png
      opacity [set every repeat] = 1 if correctResponse else 0 
      pos [set every repeat] = (-0.25, 0) if hasSmiley[Left_Stim] else (0.25,0)
      saveStartStop = False
      size = (0.0625, 0.0625)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent textPrompt2
      letterHeight = 0.035
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Which object is the smiley face under?
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    CodeComponent phaseTransition
      Code Type = Py
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      End Routine:
        if(consecutiveCorrectResponses >= criterion):
            if(currentPhase == "practice"):
                currentPhase = "training"
            elif(currentPhase == "training"):
                currentPhase = "testing"
            else:
                trialBlocks.finished = True
            trialLoop.finished = True
  Routine experimentInstructions
    TextComponent instructions1
      color = black
      letterHeight = 0.035
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.

        You will see pairs of objects. Each time there is a smiley face hidden under one of the objects. It looks like this:
    ImageComponent smileySample
      image = assets/smiley.png
      saveStartStop = False
      size = (0.0625, 0.0625)
      startVal [time (s)] = 0.0
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    TextComponent instructions2
      color = black
      letterHeight = 0.035
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Each time, use the ''LEFT" or "RIGHT" key to choose the object you think the smiley face is under. In the beginning you will have to guess.

        Press the button to see an example of the first kind of pair.
    KeyboardComponent expInstructionsResponse
      allowedKeys = 'z','m'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trialSetup
    CodeComponent trialSetupCode
      Code Type = Py
      Begin Routine:
        trialConditionsFile = "./experimentFiles/" + currentPhase + ".csv"

        consecutiveCorrectResponses = 0

        if(currentPhase == "practice"):
            criterion = 3
        else:
            criterion = int(expInfo["number of pairs"]) * 2
Flow
  Routine setup
  Routine experimentInstructions
  LoopInitiator trialBlocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 3
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    Routine trialSetup
    LoopInitiator trialLoop loopType="TrialHandler"
      conditionsFile = $(trialConditionsFile)
      loopType = random
      nReps = 6
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      conditions:
        [OrderedDict([('pair', 'practice'), ('Left_Stim', 's3c1'), ('Right_Stim', 's3c2')]),
        OrderedDict([('pair', 'practice'), ('Left_Stim', 's3c2'), ('Right_Stim', 's3c1')])]
      Routine choose
      Routine reveal
    LoopTerminator trialLoop
  LoopTerminator trialBlocks
