PsychoPy2experiment version="2023.1.2"
Settings
  Data filename = u'data/%s_%s' % (expInfo['participant'], expName)
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 960]
  color = white
  expName = fish15
  keyboardBackend = ioHub
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Routines
  Routine runTrial
    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        myFaceFileName="temp"
        myLeftFishFileName="temp"
        myRightFishFileName="temp"
        showLeftFish="temp"
        showRightFish="temp"
        myFeedbackImpage="temp"
      Begin Routine:
        myFaceFileName= "fishPix/"+face+".png"
        myLeftFishFileName="fishPix/"+leftFish+".png"
        myRightFishFileName="fishPix/"+rightFish+".png"

        print(f"Phase: {phase_used}\tRound: {round_no}")
    ImageComponent trial_face
      image [set every repeat] = $myFaceFileName
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.1
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    TextComponent trial_text
      color = black
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
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      text:
        Which fish does this person have?
        Use LEFT or RIGHT key to choose.
    ImageComponent fishOnLeft
      image [set every repeat] = $myLeftFishFileName
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = .25
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    ImageComponent fishOnRight
      image [set every repeat] = $myRightFishFileName
      pos = (+0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.25
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    KeyboardComponent trial_response
      allowedKeys = 'left','right'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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    CodeComponent code
      Code Type = Py
      End Routine:
        nFBleft=0
        nFBright=0
        if (trial_response.keys=='left') :
            myChosen="left"
            myCircleHoriz = -0.13
        else :
            myChosen="right"
            myCircleHoriz = 0.22
        if (trial_response.keys==correctResponse) :
            myTrialCorrect=True
            thisExp.addData('Correct',1)
            myTally = myTally + 1
            myFeedbackImage="fishPix/win.png"
            myConsecutiveCorrect = myConsecutiveCorrect+1
            if (myConsecutiveCorrect >= myCriterion) :
                CriterionReached=True
        else :
            myTrialCorrect=False
            thisExp.addData('Correct',0)
            myFeedbackImage="fishPix/lose.png"
            myConsecutiveCorrect = 0
        if (correctResponse=="left") :
            showLeftFish=myLeftFishFileName
            showRightFish="fishPix/blank.png"
        else :
            showLeftFish="fishPix/blank.png"
            showRightFish=myRightFishFileName
  Routine startup
    ImageComponent terms_of_use
      image = fishPix/terms_of_use.png
      saveStartStop = False
      size = (1,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent conditions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.25
      store = nothing
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        # Fish v. 12 software, running under PsychoPy2 (v. 1.85)

        #This software is adapted from software which was
        # written by Catherine E. Myers under funding from the Department
        # of Veterans Affairs, Office of Research and Development.

        # Design is adapted from the task originally described in
        # Myers et al. (2003) Journal of Cognitive Neuroscience, 15(2),
        # 185-193.

        # No guarantees are given or implied.
        # Use of this software implies acceptance of these terms.
    CodeComponent face_fish_pairing
      Code Type = Auto->JS
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      Before Experiment:
        import random
        # File names of faces and fishes without extension
        fishes = ["green", "blue", "purple", "yellow"]
        faces = ["boy", "girl", "man", "woman"]

        # Generating the random pairings
        random_numbers = []
        for _ in range(4):
            r = random.randint(0,3)
            while r in random_numbers:
                r = random.randint(0,3)
            random_numbers.append(r)

        r1, r2, r3, r4 = random_numbers
        file = open("face_fish_pairings.csv", "w")
        file.write("face,fish1,fish2\n")
        file.write(f"{faces[r1]},{fishes[r1]},{fishes[r2]}\n")
        file.write(f"{faces[r2]},{fishes[r3]},{fishes[r4]}\n")
        file.write(f"{faces[r3]},{fishes[r1]},{fishes[r2]}\n")
        file.write(f"{faces[r4]},{fishes[r3]},{fishes[r4]}\n")
        file.close()
    CodeComponent phase_gen
      Code Type = Auto->JS
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      Before Experiment:
        import csv

        def generate_phase_file(pairings, phase_faces, phase_fishes, filename, num_rounds):
            '''
            Args:
                pairings: a dictionary containing all the face-fish pairings in the
                          format pairings[face] = {fish1, fish2}
                phase_faces: a list of strings with the base file name of the faces that
                             correspond to the desired phase
                phase_fishes: a list of strings with the base file name of the fishes
                              that correspond to the desired phase
                num_rounds: an integer indicating how many rounds of stimuli are on
                            the desired phase
            Returns:
                None. It instead generates [filename].csv for the desired that lists the
                stimuli for said phase
            '''
            file = open(filename, "w")
            file.write("face,leftFish,rightFish,correctResponse,phase_used,round_no\n")
            # filename format should be phaseX.csv where X is the phase number
            phase_no = filename.split(".")[0][-1]
            for i in range(num_rounds):
                # Select a random face
                r = random.randint(0, len(phase_faces)-1)
                face = phase_faces[r]

                # Create a list of the fishes that the face above owns and does not own
                not_owned_fishes = []
                owned_fishes = []
                for fish in phase_fishes:
                    if(fish in pairings[face]):
                        owned_fishes.append(fish)
                    else:
                        not_owned_fishes.append(fish)


                # Using these lists, select a fish at random from each
                # These will be the options on screen
                #print(f"owned len = {len(owned_fishes)}\nnot owned len = {len(not_owned_fishes)}")
                r = 0
                if(len(owned_fishes) > 1):
                    r = random.randint(0, len(owned_fishes)-1)
                #print(f"correct r = {r}")
                correct = owned_fishes[r]
                r = 0
                if(len(not_owned_fishes) > 1):
                    r = random.randint(0, len(not_owned_fishes)-1)
                #print(f"incorrect r = {r}")
                incorrect = not_owned_fishes[r]

                # Select a random position for correct answer
                positions = ["left", "right"]
                r = random.randint(0, len(positions)-1)
                correct_pos = positions[r]

                # Write the row into the file. Each row has the stimuli for its
                # corresponfing round
                if(correct_pos == "left"):
                    file.write(f"{face},{correct},{incorrect},{correct_pos},{phase_no},{i}\n")
                else: # pos == right
                    file.write(f"{face},{incorrect},{correct},{correct_pos},{phase_no},{i}\n")

            file.close()

        # Getting the pairings from previously generated pairings file
        pairings = {}
        pairings_file = open("face_fish_pairings.csv", "r")
        reader = csv.DictReader(pairings_file)
        for row in reader:
            pairings[row["face"]] = [row["fish1"], row["fish2"]]
        pairings_file.close()

        # All faces
        faces = list(pairings)
        # All fishes
        fishes = []
        for face in faces:
            if len(fishes) == 4: #There are only 4 fishes
                break
            for fish in pairings[face]:
                if(fish not in fishes):
                    fishes.append(fish)

        phase0_faces = [faces[0], faces[1]]
        phase0_fishes = [pairings[faces[0]][0], pairings[faces[1]][0]]
        phase0_file = "phase0.csv"
        phase0_rounds = 10
        generate_phase_file(pairings, phase0_faces, phase0_fishes, phase0_file, phase0_rounds)

        phase1_faces = faces
        phase1_fishes = phase0_fishes
        phase1_file = "phase1.csv"
        phase1_rounds = 8
        generate_phase_file(pairings, phase1_faces, phase1_fishes, phase1_file, phase1_rounds)

        phase2_faces = faces
        phase2_fishes = fishes
        phase2_file = "phase2.csv"
        phase2_rounds = 20
        generate_phase_file(pairings, phase2_faces, phase2_fishes, phase2_file, phase2_rounds)

        phase3_faces = faces
        phase3_fishes = fishes
        phase3_file = "phase3.csv"
        phase3_rounds = 48
        generate_phase_file(pairings, phase3_faces, phase3_fishes, phase3_file, phase3_rounds)
  Routine test_instr
    TextComponent test_text1
      color = black
      letterHeight = 0.075
      pos = (0, 0.55)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Good!
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    TextComponent test_text2
      color = black
      letterHeight = 0.075
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In this part of the experiment, you will need
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    TextComponent test_text3
      color = black
      letterHeight = 0.075
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ito remember what you have learned so far.
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    TextComponent test_text4
      color = black
      letterHeight = 0.075
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You will NOT be shown the correct answers.
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    TextComponent test_text5
      color = black
      letterHeight = 0.075
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = At the end of the experiment, the computer will
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    TextComponent test_text6
      color = black
      letterHeight = 0.075
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = tell you how many you got right.
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    TextComponent test_text7
      color = black
      letterHeight = 0.075
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Good luck!
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    TextComponent test_text8
      color = black
      letterHeight = 0.075
      pos = (0, -0.55)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the LEFT or RIGHT key to begin.
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    KeyboardComponent test_instr_key
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      store = nothing
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  Routine train_instr
    TextComponent train_text1
      color = black
      letterHeight = 0.065
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to the experiment.
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    TextComponent train_text2
      color = black
      letterHeight = 0.065
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You will see drawings of people who each have some pet fish.
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    TextComponent train_text3
      color = black
      letterHeight = 0.065
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Different people have different kinds of fish.
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    TextComponent train_text4
      color = black
      letterHeight = 0.065
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your job is to learn which kind of fish each person has.
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    TextComponent train_text5
      color = black
      letterHeight = 0.065
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Each time you see a face, press the LEFT or RIGHT key,
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    TextComponent train_text6
      color = black
      letterHeight = 0.065
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = depending on which fish you think the person has.
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    TextComponent train_text7
      color = black
      letterHeight = 0.065
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In the beginning, you will have to guess.
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    TextComponent train_text8
      color = black
      letterHeight = 0.065
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Try to learn the correct answers, because you will be tested later.
      wrapWidth = 50
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    TextComponent train_text9
      color = black
      letterHeight = 0.065
      pos = (0, -0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the LEFT or RIGHT key to begin.
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    KeyboardComponent train_instr_key
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.25
      store = nothing
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    CodeComponent code_train_instr
      Code Type = Py
      Begin Experiment:
        myISIduration=1.0
        myTally=0

        CriterionReached=False
        myConsecutiveCorrect=0
        myCriterion=4

        myCircleHoriz = -0.15
        myCircleVert = 0.01

        myTrialCorrect = False
        myErr1 = 0
        myCrit1 = 0
        myErr2 = 0
        myCrit2 = 0
        myErr3 = 0
        myCrit3 = 0
        myOldErr = 0
        myNewErr = 0
        myOldTrials = 0
        myNewTrials = 0
  Routine goodbye
    TextComponent goodbye_text1
      color = black
      letterHeight = 0.08
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The end.
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    TextComponent goodbye_text2
      color = black
      letterHeight = 0.08
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your final point total was:
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    TextComponent goodbye_tally
      color = black
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $myTally
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    TextComponent goodbye_text3
      color = black
      letterHeight = 0.08
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thanks for participating.
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    TextComponent goodbye_text4
      color = black
      letterHeight = 0.05
      pos = (0, -.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar to exit.
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    KeyboardComponent goodbye_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.25
      store = nothing
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    CodeComponent code_6
      Code Type = Auto->JS
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      End Experiment:
        thisExp.addData('Err1',myErr1)
        thisExp.addData('Err2',myErr2)
        thisExp.addData('Err3',myErr3)
        thisExp.addData('Crit1',myCrit1)
        thisExp.addData('Crit2',myCrit2)
        thisExp.addData('Crit3',myCrit3)
        thisExp.addData('PctErrTestOld',100*myOldErr/myOldTrials)
        thisExp.addData('PctErrTestNew',100*myNewErr/myNewTrials)
  Routine doFB1
    ImageComponent FB2_face
      durationEstim = 1
      image [set every repeat] = $myFaceFileName
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB2_Circle
      durationEstim = 1
      image = fishPix/TheCircle.jpg
      pos [set every repeat] = [myCircleHoriz, myCircleVert]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB1_leftFish
      durationEstim = 1
      image [set every repeat] = $showLeftFish
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB1_rightFish
      durationEstim = 1
      image [set every repeat] = $showRightFish
      pos = (+0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB1_text
      durationEstim = 1
      image [set every repeat] = $myFeedbackImage
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    CodeComponent FB1_code
      Code Type = Py
      End Routine:
        if (myTrialCorrect==False) :
            myErr1 += 1
        if (CriterionReached==True) :
            trials1.finished=True
            myCrit1 = 1
  Routine doFB2
    ImageComponent FB2_face_2
      durationEstim = 1
      image [set every repeat] = $myFaceFileName
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB2_Circle_2
      durationEstim = 1
      image = fishPix/TheCircle.jpg
      pos [set every repeat] = [myCircleHoriz, myCircleVert]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB2_leftFish
      durationEstim = 1
      image [set every repeat] = $showLeftFish
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB2_rightFish
      durationEstim = 1
      image [set every repeat] = $showRightFish
      pos = (+0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB2_text
      durationEstim = 1
      image [set every repeat] = $myFeedbackImage
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    CodeComponent FB2_code
      Code Type = Py
      End Routine:
        if (myTrialCorrect==False) :
            myErr2 += 1
        if (CriterionReached==True) :
            trials2.finished=True
            myCrit2 = 1
  Routine doFB3
    ImageComponent FB3_face
      durationEstim = 1
      image [set every repeat] = $myFaceFileName
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB3_Circle
      durationEstim = 1
      image = fishPix/TheCircle.jpg
      pos [set every repeat] = [myCircleHoriz, myCircleVert]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB3_leftFish
      durationEstim = 1
      image [set every repeat] = $showLeftFish
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB3_rightFish
      durationEstim = 1
      image [set every repeat] = $showRightFish
      pos = (+0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB3_text
      durationEstim = 1
      image [set every repeat] = $myFeedbackImage
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    CodeComponent FB3_code
      Code Type = Py
      End Routine:
        if (myTrialCorrect==False) :
            myErr3 += 1
        if (CriterionReached==True) :
            trials3.finished=True
            myCrit3 = 1
  Routine noFB
    ImageComponent noFB_face
      durationEstim = 1
      image [set every repeat] = $myFaceFileName
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent noFB_Circle
      durationEstim = 1
      image = fishPix/TheCircle.jpg
      pos [set every repeat] = [myCircleHoriz, myCircleVert]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = myISIduration
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    ImageComponent noFB_leftFish
      durationEstim = 1
      image [set every repeat] = $myLeftFishFileName
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent noFB_rightFish
      durationEstim = 1
      image [set every repeat] = $myRightFishFileName
      pos = (+0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        if (phase_used==4) :
            myNewTrials+=1
        else :
            myOldTrials+=1
        if (myTrialCorrect==False) :
            if (phase_used==4) :
                myNewErr+=1
            else :
                myOldErr+=1
  Routine next_stage
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        CriterionReached=False
        myConsecutiveCorrect=0
        myCriterion = myCriterion+4
Flow
  Routine startup
  Routine train_instr
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = phase0.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('face', 'girl'), ('leftFish', 'blue'), ('rightFish', 'green'), ('correctResponse', 'left'), ('phase_used', 0), ('round_no', 0)]),
      OrderedDict([('face', 'man'), ('leftFish', 'blue'), ('rightFish', 'green'), ('correctResponse', 'right'), ('phase_used', 0), ('round_no', 1)]),
      OrderedDict([('face', 'girl'), ('leftFish', 'blue'), ('rightFish', 'green'), ('correctResponse', 'left'), ('phase_used', 0), ('round_no', 2)]),
      OrderedDict([('face', 'girl'), ('leftFish', 'green'), ('rightFish', 'blue'), ('correctResponse', 'right'), ('phase_used', 0), ('round_no', 3)]),
      OrderedDict([('face', 'girl'), ('leftFish', 'green'), ('rightFish', 'blue'), ('correctResponse', 'right'), ('phase_used', 0), ('round_no', 4)]),
      OrderedDict([('face', 'man'), ('leftFish', 'green'), ('rightFish', 'blue'), ('correctResponse', 'left'), ('phase_used', 0), ('round_no', 5)]),
      OrderedDict([('face', 'man'), ('leftFish', 'blue'), ('rightFish', 'green'), ('correctResponse', 'right'), ('phase_used', 0), ('round_no', 6)]),
      OrderedDict([('face', 'man'), ('leftFish', 'green'), ('rightFish', 'blue'), ('correctResponse', 'left'), ('phase_used', 0), ('round_no', 7)]),
      OrderedDict([('face', 'girl'), ('leftFish', 'green'), ('rightFish', 'blue'), ('correctResponse', 'right'), ('phase_used', 0), ('round_no', 8)]),
      OrderedDict([('face', 'girl'), ('leftFish', 'green'), ('rightFish', 'blue'), ('correctResponse', 'right'), ('phase_used', 0), ('round_no', 9)])]
    Routine runTrial
    Routine doFB1
  LoopTerminator trials1
  Routine next_stage
  LoopInitiator trials2 loopType="TrialHandler"
    Selected rows = 0:-1
    conditionsFile = phase1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('face', 'boy'), ('leftFish', 'blue'), ('rightFish', 'purple'), ('correctResponse', 'left'), ('phase_used', 1), ('round', 0)]),
      OrderedDict([('face', 'boy'), ('leftFish', 'blue'), ('rightFish', 'purple'), ('correctResponse', 'left'), ('phase_used', 1), ('round', 1)]),
      OrderedDict([('face', 'woman'), ('leftFish', 'blue'), ('rightFish', 'purple'), ('correctResponse', 'left'), ('phase_used', 1), ('round', 2)]),
      OrderedDict([('face', 'woman'), ('leftFish', 'purple'), ('rightFish', 'blue'), ('correctResponse', 'right'), ('phase_used', 1), ('round', 3)]),
      OrderedDict([('face', 'boy'), ('leftFish', 'blue'), ('rightFish', 'purple'), ('correctResponse', 'left'), ('phase_used', 1), ('round', 4)]),
      OrderedDict([('face', 'girl'), ('leftFish', 'purple'), ('rightFish', 'blue'), ('correctResponse', 'left'), ('phase_used', 1), ('round', 5)]),
      OrderedDict([('face', 'woman'), ('leftFish', 'blue'), ('rightFish', 'purple'), ('correctResponse', 'left'), ('phase_used', 1), ('round', 6)]),
      OrderedDict([('face', 'girl'), ('leftFish', 'blue'), ('rightFish', 'purple'), ('correctResponse', 'right'), ('phase_used', 1), ('round', 7)])]
    Routine runTrial
    Routine doFB2
  LoopTerminator trials2
  Routine next_stage
  LoopInitiator trials3 loopType="TrialHandler"
    Selected rows = 0:-1
    conditionsFile = phase2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('face', 'boy'), ('leftFish', 'blue'), ('rightFish', 'purple'), ('correctResponse', 'left'), ('phase_used', 2), ('round', 0)]),
      OrderedDict([('face', 'boy'), ('leftFish', 'yellow'), ('rightFish', 'blue'), ('correctResponse', 'right'), ('phase_used', 2), ('round', 1)]),
      OrderedDict([('face', 'girl'), ('leftFish', 'green'), ('rightFish', 'yellow'), ('correctResponse', 'right'), ('phase_used', 2), ('round', 2)]),
      OrderedDict([('face', 'man'), ('leftFish', 'blue'), ('rightFish', 'purple'), ('correctResponse', 'right'), ('phase_used', 2), ('round', 3)]),
      OrderedDict([('face', 'boy'), ('leftFish', 'yellow'), ('rightFish', 'blue'), ('correctResponse', 'right'), ('phase_used', 2), ('round', 4)]),
      OrderedDict([('face', 'girl'), ('leftFish', 'blue'), ('rightFish', 'yellow'), ('correctResponse', 'right'), ('phase_used', 2), ('round', 5)]),
      OrderedDict([('face', 'boy'), ('leftFish', 'yellow'), ('rightFish', 'blue'), ('correctResponse', 'right'), ('phase_used', 2), ('round', 6)]),
      OrderedDict([('face', 'girl'), ('leftFish', 'green'), ('rightFish', 'yellow'), ('correctResponse', 'right'), ('phase_used', 2), ('round', 7)]),
      OrderedDict([('face', 'girl'), ('leftFish', 'purple'), ('rightFish', 'green'), ('correctResponse', 'left'), ('phase_used', 2), ('round', 8)]),
      OrderedDict([('face', 'man'), ('leftFish', 'purple'), ('rightFish', 'green'), ('correctResponse', 'left'), ('phase_used', 2), ('round', 9)])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
    Routine runTrial
    Routine doFB3
  LoopTerminator trials3
  Routine test_instr
  LoopInitiator test_trials loopType="TrialHandler"
    Selected rows = 0:-1
    conditionsFile = phase3.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('face', 'man'), ('leftFish', 'purple'), ('rightFish', 'blue'), ('correctResponse', 'left'), ('phase_used', 3), ('round', 0)]),
      OrderedDict([('face', 'woman'), ('leftFish', 'purple'), ('rightFish', 'blue'), ('correctResponse', 'right'), ('phase_used', 3), ('round', 1)]),
      OrderedDict([('face', 'girl'), ('leftFish', 'purple'), ('rightFish', 'green'), ('correctResponse', 'left'), ('phase_used', 3), ('round', 2)]),
      OrderedDict([('face', 'girl'), ('leftFish', 'blue'), ('rightFish', 'yellow'), ('correctResponse', 'right'), ('phase_used', 3), ('round', 3)]),
      OrderedDict([('face', 'man'), ('leftFish', 'blue'), ('rightFish', 'purple'), ('correctResponse', 'right'), ('phase_used', 3), ('round', 4)]),
      OrderedDict([('face', 'woman'), ('leftFish', 'yellow'), ('rightFish', 'blue'), ('correctResponse', 'right'), ('phase_used', 3), ('round', 5)]),
      OrderedDict([('face', 'girl'), ('leftFish', 'yellow'), ('rightFish', 'green'), ('correctResponse', 'left'), ('phase_used', 3), ('round', 6)]),
      OrderedDict([('face', 'girl'), ('leftFish', 'blue'), ('rightFish', 'purple'), ('correctResponse', 'right'), ('phase_used', 3), ('round', 7)]),
      OrderedDict([('face', 'man'), ('leftFish', 'blue'), ('rightFish', 'purple'), ('correctResponse', 'right'), ('phase_used', 3), ('round', 8)]),
      OrderedDict([('face', 'man'), ('leftFish', 'yellow'), ('rightFish', 'green'), ('correctResponse', 'left'), ('phase_used', 3), ('round', 9)])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
    Routine runTrial
    Routine noFB
  LoopTerminator test_trials
  Routine goodbye
